PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = beedTask
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      nVertices = 36
      pos = (-0.8, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    PolygonComponent polygon_3
      fillColor = $[0.004,1.000,1.000]
      lineColor = $[0.004,1.000,1.000]
      nVertices = 36
      pos = (-0.6, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 2
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    PolygonComponent polygon_4
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      nVertices = 36
      pos = (-0.4, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 4
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    PolygonComponent polygon_5
      fillColor = $[1.000,1.000,-1.000]
      lineColor = $[1.000,1.000,-1.000]
      nVertices = 36
      pos = (-0.2, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 6
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    PolygonComponent polygon_6
      fillColor = $[1.000,0.004,0.506]
      lineColor = $[1.000,0.004,0.506]
      nVertices = 36
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 8
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    PolygonComponent polygon_7
      fillColor = $[0.004,0.004,1.000]
      lineColor = $[0.004,0.004,1.000]
      nVertices = 36
      pos = (0.2, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 10
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    PolygonComponent polygon_8
      fillColor = $[1,1,1]
      nVertices = 36
      pos = (0.4, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 12
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    PolygonComponent polygon_9
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      nVertices = 36
      pos = (0.6, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 14
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    PolygonComponent polygon_10
      fillColor = $[-0.498,0.004,0.004]
      lineColor = $[-0.498,0.004,0.004]
      nVertices = 36
      pos = (0.8, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 16
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Flow
  Routine trial
